'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 1
' Initial_Processdelay           = 5000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.3.1
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = DESKTOP-PB9TKB9  DESKTOP-PB9TKB9\User
'<Header End>
#include ADwinPro_All.Inc
' #include Math.Inc

#define endCC par_1
#define analogArrayDim par_2
#define digitalArrayDim par_3

#define analogMaxArrayDim 10000000
#define digitalMaxArrayDim 10000

#define cyclecount par_6
#define analogIdx par_7
#define digitalIdx par_8


sub processSwitches(cc)
  ' analog
  if (data_10[analogIdx] = cc) then
    do  
      p2_dac(data_11[analogIdx],data_12[analogIdx],data_13[analogIdx])
      '      par_10=data_10[analogIdx] : par_11=data_11[analogIdx] : par_12=data_12[analogIdx] : par_13=data_13[analogIdx]
      inc analogIdx
    until ( (analogIdx > analogArrayDim) or (data_10[analogIdx] > cc) )
  endif
  ' digital
  if (data_20[digitalIdx] = cc) then
    do
      p2_digout(1,data_22[digitalIdx],data_23[digitalIdx])
      '      par_20=data_20[digitalIdx] : par_22=data_22[digitalIdx] : par_23=data_23[digitalIdx]
      inc digitalIdx
    until ( (digitalIdx > digitalArrayDim) or (data_20[digitalIdx] > cc) )
  endif
endsub


dim data_10[analogMaxArrayDim] as long ' Clock cycles of analog switches
dim data_11[analogMaxArrayDim] as long ' Module numbers of analog switches
dim data_12[analogMaxArrayDim] as long ' Channels of analog switches
dim data_13[analogMaxArrayDim] as long ' Values (digitized) of analog switches

dim data_20[digitalMaxArrayDim] as long ' Clock cycles of digital switches
dim data_22[digitalMaxArrayDim] as long ' Channels of digital switches
dim data_23[digitalMaxArrayDim] as long ' Values (0 or 1) of digital switches


lowinit:
  cyclecount = 0 : analogIdx = 1 : digitalIdx = 1
  par_4 = analogMaxArrayDim
  par_5 = digitalMaxArrayDim
  p2_digprog(1,1111b) ' set all the digital ports to output
  
  processSwitches(-2)
  
init:
  processSwitches(-1)
  
event:
  if (cyclecount = endCC+1) then end '+1 is needed to resolve the indexing differences between ADwin and Python
  
  processSwitches(cyclecount)
  
  inc cyclecount

finish:
  ' 2**31
  processSwitches(2147483648)
