'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 1
' Initial_Processdelay           = 5000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.3.1
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = DESKTOP-PB9TKB9  DESKTOP-PB9TKB9\User
'<Header End>
#include ADwinPro_All.Inc

#define endCC par_1
#define analogArrayDim par_2
#define digitalArrayDim par_3

#define analogMaxArrayDim 10000000
#define digitalMaxArrayDim 10000

#define cyclecount par_6
#define analogIdx par_7
#define digitalIdx par_8

' The period check (#128). `upload` writes the Processdelay it built the arrays for into
' processdelayExpected; this program reports the one its event loop runs at.
#define processdelayExpected par_9
#define processdelayReported par_14

' The final state (B11), in arrays of its own, played in full by finish: however the run
' ended. At most one row per variable, so a few hundred entries suffice.
#define finishMaxArrayDim 256
#define analogFinishDim par_15
#define digitalFinishDim par_16

' Who is playing the arrays (step 9): this process's number from the start of lowinit to the
' end of finish:, 0 otherwise. The arrays are shared by every process on the machine, so
' Python waits on whichever process holds them, and the console writes nothing meanwhile.
#define sequenceOwner par_17
#define consoleProcess 10
' Raised by the console while it runs (set in its init:, cleared in its finish:), so that a
' console stopped for the run can be started again after it, and one that was not running is
' left alone.
#define consoleRunning par_18


sub processUpdates(cc)
  ' analog
  if ( (analogIdx <= analogArrayDim) and (data_10[analogIdx] = cc) ) then
    do  
      p2_dac(data_11[analogIdx],data_12[analogIdx],data_13[analogIdx])
      '      par_10=data_10[analogIdx] : par_11=data_11[analogIdx] : par_12=data_12[analogIdx] : par_13=data_13[analogIdx]
      inc analogIdx
    until ( (analogIdx > analogArrayDim) or (data_10[analogIdx] > cc) )
  endif
  ' digital
  if ( (digitalIdx <= digitalArrayDim) and (data_20[digitalIdx] = cc) ) then
    do
      p2_digout(1,data_22[digitalIdx],data_23[digitalIdx])
      '      par_20=data_20[digitalIdx] : par_22=data_22[digitalIdx] : par_23=data_23[digitalIdx]
      inc digitalIdx
    until ( (digitalIdx > digitalArrayDim) or (data_20[digitalIdx] > cc) )
  endif
endsub


dim data_10[analogMaxArrayDim] as long ' Clock cycles of analog updates
dim data_11[analogMaxArrayDim] as long ' Module numbers of analog updates
dim data_12[analogMaxArrayDim] as long ' Channels of analog updates
dim data_13[analogMaxArrayDim] as long ' Values (digitized) of analog updates

dim data_20[digitalMaxArrayDim] as long ' Clock cycles of digital updates
dim data_22[digitalMaxArrayDim] as long ' Channels of digital updates
dim data_23[digitalMaxArrayDim] as long ' Values (0 or 1) of digital updates

dim data_31[finishMaxArrayDim] as long ' Module numbers of the final analog state
dim data_32[finishMaxArrayDim] as long ' Channels of the final analog state
dim data_33[finishMaxArrayDim] as long ' Values (digitized) of the final analog state

dim data_42[finishMaxArrayDim] as long ' Channels of the final digital state
dim data_43[finishMaxArrayDim] as long ' Values (0 or 1) of the final digital state

dim finishIdx as long
dim consoleWasRunning as long


lowinit:
  ' The manual console must not write to the outputs while a sequence plays.
  ' Read before stopping it: stopping it runs its finish:, which lowers the flag.
  consoleWasRunning = consoleRunning
  Stop_Process(consoleProcess)
  sequenceOwner = 1
  cyclecount = 0 : analogIdx = 1 : digitalIdx = 1
  par_4 = analogMaxArrayDim
  par_5 = digitalMaxArrayDim
  p2_digprog(1,1111b) ' set all the digital ports to output
  
  processUpdates(-2)
  
init:
  processUpdates(-1)

  ' Checked here rather than in lowinit, since a program may set its own Processdelay
  ' before this point. On a mismatch the first event ends the run: the initial state has
  ' been applied, and nothing after it is played.
  processdelayReported = Processdelay
  if (processdelayReported <> processdelayExpected) then endCC = -1
  
event:
  if (cyclecount > endCC) then end
  
  processUpdates(cyclecount)
  
  inc cyclecount

finish:
  ' Unconditionally, from index 1: an interrupted run restores the final state as surely as
  ' one that completed, which the playback arrays could not guarantee (B11).
  for finishIdx = 1 to analogFinishDim
    p2_dac(data_31[finishIdx],data_32[finishIdx],data_33[finishIdx])
  next finishIdx
  for finishIdx = 1 to digitalFinishDim
    p2_digout(1,data_42[finishIdx],data_43[finishIdx])
  next finishIdx

  ' Last of all, once the final state is out: the arrays are free.
  sequenceOwner = 0

  ' And the console, if the run stopped it, comes back on the final state.
  if (consoleWasRunning <> 0) then Start_Process(consoleProcess)
